PsychoPy2experiment version="2022.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Vibrating Head Prompts
  keyboardBackend = ioHub
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Routines
  Routine End
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        End of Trial

        Thank you for participating
  Routine Begin
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Beginning instructiuons.....
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    CodeComponent Text_to_Speech
      Code Type = Py
      disabled = True
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      Begin Routine:
        import pyttsx3

        engine = pyttsx3.init()
        engine.say("Beginning instructiuons.....")
        engine.runAndWait()
  Routine Count_down
    TextComponent Count_back_from_onehundred
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = Begin counting back from 100.
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 30.0
      stopVal [duration (s)] = 30.0
      text = Take a 30 second break.
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  Routine Countdown_Prompt
    TextComponent CD_Prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = For the next task, count backwards from 100 in decrements of 7. 
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  Routine Tapping_Prompt
    TextComponent tPrompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = For this task, you will be asked to tap your left index finger to your left thumb repeatedly at a steady pace for 30 seconds. You will then receive a 30 second break before tapping your right index finger to your right thumb, then you will take another 30 second break. You will do this task 3 times.
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  Routine Tapping
    TextComponent TapL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = Tap left fingers for 30 seconds.
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    TextComponent break1
      letterHeight = 0.05
      startVal [time (s)] = 30.0
      stopVal [duration (s)] = 30.0
      text = take 30 second break.
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    TextComponent TapR
      letterHeight = 0.05
      startVal [time (s)] = 60.0
      stopVal [duration (s)] = 30.0
      text = Tap right fingers for 30 seconds.
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    TextComponent break2
      letterHeight = 0.05
      startVal [time (s)] = 90.0
      stopVal [duration (s)] = 30.0
      text = Take a 30 second break. 
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Flow
  Routine Begin
  Routine Tapping_Prompt
  LoopInitiator tappingTrials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Tapping
  LoopTerminator tappingTrials
  Routine Countdown_Prompt
  LoopInitiator countdownTrials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Count_down
  LoopTerminator countdownTrials
  Routine End
